PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = tTraceTest5
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Routines
  Routine trial
    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        trialCursor.pos = (1.5,1.5)
        trialMouse.pos = (1.5,1.5)

        response1 = False
        response2 = True
        response3 = True
        response4 = True
        response5 = True
        response6 = True
        response7 = True
        response8 = True
        responseA = True
        responseB = True
        responseC = True
        responseD = True
        responseE = True
        responseF = True
        responseG = True
        responseH = True

        targetOpac1 = 0.25
        targetOpac2 = 0.25
        targetOpac3 = 0.25
        targetOpac4 = 0.25
        targetOpac5 = 0.25
        targetOpac6 = 0.25
        targetOpac7 = 0.25
        targetOpac8 = 0.25
        targetOpacA = 0.25
        targetOpacB = 0.25
        targetOpacC = 0.25
        targetOpacD = 0.25
        targetOpacE = 0.25
        targetOpacF = 0.25
        targetOpacG = 0.25
        targetOpacH = 0.25

        targetPhase = 1

        trialStep = 1
        steps = []
      Each Frame:
        CursorTargetDistance1 = sqrt((trialCursor.pos[0]-trialTarget1.pos[0])**2 + (trialCursor.pos[1]-trialTarget1.pos[1])**2)
        CursorTargetDistance2 = sqrt((trialCursor.pos[0]-trialTarget2.pos[0])**2 + (trialCursor.pos[1]-trialTarget2.pos[1])**2)
        CursorTargetDistance3 = sqrt((trialCursor.pos[0]-trialTarget3.pos[0])**2 + (trialCursor.pos[1]-trialTarget3.pos[1])**2)
        CursorTargetDistance4 = sqrt((trialCursor.pos[0]-trialTarget4.pos[0])**2 + (trialCursor.pos[1]-trialTarget4.pos[1])**2)
        CursorTargetDistance5 = sqrt((trialCursor.pos[0]-trialTarget5.pos[0])**2 + (trialCursor.pos[1]-trialTarget5.pos[1])**2)
        CursorTargetDistance6 = sqrt((trialCursor.pos[0]-trialTarget6.pos[0])**2 + (trialCursor.pos[1]-trialTarget6.pos[1])**2)
        CursorTargetDistance7 = sqrt((trialCursor.pos[0]-trialTarget7.pos[0])**2 + (trialCursor.pos[1]-trialTarget7.pos[1])**2)
        CursorTargetDistance8 = sqrt((trialCursor.pos[0]-trialTarget8.pos[0])**2 + (trialCursor.pos[1]-trialTarget8.pos[1])**2)
        CursorTargetDistanceA = sqrt((trialCursor.pos[0]-trialTargetA.pos[0])**2 + (trialCursor.pos[1]-trialTargetA.pos[1])**2)
        CursorTargetDistanceB = sqrt((trialCursor.pos[0]-trialTargetB.pos[0])**2 + (trialCursor.pos[1]-trialTargetB.pos[1])**2)
        CursorTargetDistanceC = sqrt((trialCursor.pos[0]-trialTargetC.pos[0])**2 + (trialCursor.pos[1]-trialTargetC.pos[1])**2)
        CursorTargetDistanceD = sqrt((trialCursor.pos[0]-trialTargetD.pos[0])**2 + (trialCursor.pos[1]-trialTargetD.pos[1])**2)
        CursorTargetDistanceE = sqrt((trialCursor.pos[0]-trialTargetE.pos[0])**2 + (trialCursor.pos[1]-trialTargetE.pos[1])**2)
        CursorTargetDistanceF = sqrt((trialCursor.pos[0]-trialTargetF.pos[0])**2 + (trialCursor.pos[1]-trialTargetF.pos[1])**2)
        CursorTargetDistanceG = sqrt((trialCursor.pos[0]-trialTargetG.pos[0])**2 + (trialCursor.pos[1]-trialTargetG.pos[1])**2)
        CursorTargetDistanceH = sqrt((trialCursor.pos[0]-trialTargetH.pos[0])**2 + (trialCursor.pos[1]-trialTargetH.pos[1])**2)

        steps.append(trialStep)

        if targetPhase == 1:
            if not response1:
                trialStep = 1
                if (CursorTargetDistance1 < .05):
                    targetOpac1 = 0
                    response1 = True
                    responseA = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not responseA:
                trialStep = 2
                if (CursorTargetDistanceA < .05):
                    targetOpacA = 0
                    responseA = True
                    response2 = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not response2:
                trialStep = 3
                if (CursorTargetDistance2 < .05):
                    targetOpac2 = 0
                    response2 = True
                    responseB = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not responseB:
                trialStep = 4
                if (CursorTargetDistanceB < .05):
                    targetOpacB = 0
                    responseB = True
                    response3 = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
                    targetPhase = 2
        elif targetPhase == 2:
            if not response3:
                trialStep = 5
                if (CursorTargetDistance3 < .05):
                    targetOpac3 = 0
                    response3 = True
                    responseC = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not responseC:
                trialStep = 6
                if (CursorTargetDistanceC < .05):
                    targetOpacC = 0
                    responseC = True
                    response4 = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not response4:
                trialStep = 7
                if (CursorTargetDistance4 < .05):
                    targetOpac4 = 0
                    response4 = True
                    responseD = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not responseD:
                trialStep = 8
                if (CursorTargetDistanceD < .05):
                    targetOpacD = 0
                    responseD = True
                    response5 = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
                    targetPhase = 3
        elif targetPhase == 3:
            if not response5:
                trialStep = 9
                if (CursorTargetDistance5 < .05):
                    targetOpac5 = 0
                    response5 = True
                    responseE = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not responseE:
                trialStep = 10
                if (CursorTargetDistanceE < .05):
                    targetOpacE = 0
                    responseE = True
                    response6 = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not response6:
                trialStep = 11
                if (CursorTargetDistance6 < .05):
                    targetOpac6 = 0
                    response6 = True
                    responseF = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not responseF:
                trialStep = 12
                if (CursorTargetDistanceF < .05):
                    targetOpacF = 0
                    responseF = True
                    response7 = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
                    targetPhase = 4
        elif targetPhase == 4:
            if not response7:
                trialStep = 13
                if (CursorTargetDistance7 < .05):
                    targetOpac7 = 0
                    response7 = True
                    responseG = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not responseG:
                trialStep = 14
                if (CursorTargetDistanceG < .05):
                    targetOpacG = 0
                    responseG = True
                    response8 = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not response8:
                trialStep = 15
                if (CursorTargetDistance8 < .05):
                    targetOpac8 = 0
                    response8 = True
                    responseH = False
                    print('Target get'+' ('+str(globalClock.getTime())+')')
            if not responseH:
                trialStep = 16
                if (CursorTargetDistanceH < .05):
                    targetOpacH = 0
                    responseH = True
                    print('Target get'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False
      End Routine:
        thisExp.addData('step', steps)
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    PolygonComponent trialCursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = (trialMouse.getPos()[0], trialMouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget1
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac1
      pos [set every repeat] = (pos1, pos2)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget2
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac2
      pos [set every repeat] = (pos5, pos6)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget3
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac3
      pos [set every repeat] = (pos9, pos10)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget4
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac4
      pos [set every repeat] = (pos13, pos14)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget5
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac5
      pos [set every repeat] = (pos15, pos16)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget6
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac6
      pos [set every repeat] = (pos17, pos18)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget7
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac7
      pos [set every repeat] = (pos19, pos20)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTarget8
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpac8
      pos [set every repeat] = (pos21, pos22)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetA
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacA
      pos [set every repeat] = (pos3, pos4)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetB
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacB
      pos [set every repeat] = (pos7, pos8)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetC
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacC
      pos [set every repeat] = (pos11, pos12)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetD
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacD
      pos [set every repeat] = (pos23, pos24)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetE
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacE
      pos [set every repeat] = (pos25, pos26)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetF
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacF
      pos [set every repeat] = (pos27, pos28)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetG
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacG
      pos [set every repeat] = (pos29, pos30)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialTargetH
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacH
      pos [set every repeat] = (pos31, pos32)
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    VariableComponent trialStep
      startExpValue = 0
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    TextComponent trialText1
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos1, pos2)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent trialText2
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos5, pos6)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent trialText3
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos9, pos10)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent trialText4
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos13, pos14)
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent trialText5
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos15, pos16)
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent trialText6
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos17, pos18)
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent trialText7
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos19, pos20)
      startVal [time (s)] = 0.0
      text = 7
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    TextComponent trialText8
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos21, pos22)
      startVal [time (s)] = 0.0
      text = 8
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    TextComponent trialTextA
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos3, pos4)
      startVal [time (s)] = 0.0
      text = A
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    TextComponent trialTextB
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos7, pos8)
      startVal [time (s)] = 0.0
      text = B
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    TextComponent trialTextC
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos11, pos12)
      startVal [time (s)] = 0.0
      text = C
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    TextComponent trialTextD
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos23, pos24)
      startVal [time (s)] = 0.0
      text = D
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    TextComponent trialTextE
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos25, pos26)
      startVal [time (s)] = 0.0
      text = E
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    TextComponent trialTextF
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos27, pos28)
      startVal [time (s)] = 0.0
      text = F
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    TextComponent trialTextG
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos29, pos30)
      startVal [time (s)] = 0.0
      text = G
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    TextComponent trialTextH
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (pos31, pos32)
      startVal [time (s)] = 0.0
      text = H
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  Routine setup
    CodeComponent JSCode
      Code Type = JS
      Begin JS Experiment:
        // Code to fix reference errors in JS
        thisExp = psychoJS.experiment;
        win = psychoJS.window;
        event = psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        document.documentElement.style.cursor = 'none';
        // Math related fixes
        pi = Math.PI;
        sin = Math.sin;
        cos = Math.cos;
        sqrt = Math.sqrt;
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
        shuffle = util.shuffle;
      End JS Experiment:
        document.documentElement.style.cursor = 'auto';
    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        posArray1 = [-0.05,-0.1,-0.15,-0.2,-0.25,-0.3,-0.35,-0.4,0.05,0.1,0.15,0.2,0.25,0.3,0.35,0.4]
        posArray2 = [-0.05,-0.1,-0.15,-0.2,-0.25,-0.3,-0.35,-0.4,0.05,0.1,0.15,0.2,0.25,0.3,0.35,0.4]
  Routine instr
    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(posArray1)
        shuffle(posArray2)
        pos1 = posArray1[0]
        pos2 = posArray2[0]
        pos3 = posArray1[1]
        pos4 = posArray2[1]
        pos5 = posArray1[2]
        pos6 = posArray2[2]
        pos7 = posArray1[3]
        pos8 = posArray2[3]
        pos9 = posArray1[4]
        pos10 = posArray2[4]
        pos11 = posArray1[5]
        pos12 = posArray2[5]
        pos13 = posArray1[6]
        pos14 = posArray2[6]
        pos15 = posArray1[7]
        pos16 = posArray2[7]
        pos17 = posArray1[8]
        pos18 = posArray2[8]
        pos19 = posArray1[9]
        pos20 = posArray2[9]
        pos21 = posArray1[10]
        pos22 = posArray2[10]
        pos23 = posArray1[11]
        pos24 = posArray2[11]
        pos25 = posArray1[12]
        pos26 = posArray2[12]
        pos27 = posArray1[13]
        pos28 = posArray2[13]
        pos29 = posArray1[14]
        pos30 = posArray2[14]
        pos31 = posArray1[15]
        pos32 = posArray2[15]
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The order is 1, A, 2, B, 3, C, 4, D, 5, E, 6, F, 7, G, 8, H. Press space to continue.
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    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator tasks loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator tasks
